PsychoPy2experiment version="2022.2.5"
Settings
  Audio latency priority = 2
  Audio lib = ptb
  Data filename = u'results/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1707, 1920]
  expName = template
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent el_ControlScript
      Code Type = Py
      Begin Routine:
        ############################
        # Eyelink recording starts
        ############################
        if (not dummy_mode):
            try:
                el_tracker.startRecording(1, 1, 1, 1)
                # send a "TRIALID" message to mark the start of a trial, see Data
                # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
                el_tracker.sendMessage('TRIALID %d' % (trialLoop.thisRepN + 1))

                el_tracker.sendMessage('BLOCK_ID %d, TRIAL_ID %d' % ((blockLoop.thisN + 1), (trialLoop.thisN + 1)))

                # record_status_message : show some info on the Host PC
                # here we show how many trial has been tested
                status_msg = 'BLOCK_ID %d, TRIALID %d' % ((blockLoop.thisN + 1), (trialLoop.thisN + 1))
                el_tracker.sendCommand("record_status_message '%s'" % status_msg)

            except RuntimeError as error:
                print("ERROR:", error)
                abort_trial()
                # return pylink.TRIAL_ERROR

            # Allocate some time for the tracker to cache some samples
            pylink.pumpDelay(100)

            # clear the Data Viewer screen as well
            bgcolor_RGB = (140, 140, 140)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)
      End Routine:
        ############################
        # Eyelink recording stops
        ############################

        if (not dummy_mode):
            el_tracker.sendMessage('trial_ends')
            # save data to the eye tracking file

            # record trial variables to the EDF data file, for details, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            # as an example, the following line will create a variable of phase and assign 'test' as its value
            el_tracker.sendMessage('!V TRIAL_VAR phase %s' % 'test')
            # another example, the following line will create a variable of trialNum and assign trialLoop.thisN + 1 as its value
            # put 10 ms to allow all variables transferred to the eye tracking data
            core.wait(0.001)
            el_tracker.sendMessage('!V TRIAL_VAR trialNum %s' % (trialLoop.thisN + 1))

            # clear the screen
            clear_screen(win, genv)

            # send a message to clear the Data Viewer screen as well
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # close the VCL file that contain the VFRAME messages
            # dlf_file.close()

            # stop recording; add 100 msec to catch final events before stopping
            pylink.pumpDelay(100)
            el_tracker.stopRecording()

            # send a 'TRIAL_RESULT' message to mark the end of trial, see Data
            # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_OK)
    CodeComponent el_SendMarkersScript
      Code Type = Py
      Begin Routine:
        # eye tracker markers
        sendMarker = True
      Each Frame:
        # send a mark to eye tracker to mark the start of stimuli onset
        # the following is an example for the onset of the image component
        # here, 'image' is the name of the Component in this Routine.
        if sendMarker and image.status == STARTED and (not dummy_mode):
            sendMarker = False
            el_tracker.sendMessage('image_starts')

        # the following is an example for the offset of the image tool.
        # this might not always work as image offset might overlap with trial offset.
        if sendMarker == False and image.status == FINISHED and (not dummy_mode):
            el_tracker.sendMessage('image_ends')
            sendMarker = True
    ImageComponent image
      image = images/AM28H.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent el_LandmarkScript
      Code Type = Py
      Begin Routine:
        # this script is to draw landmarks on the Host PC

        if (not dummy_mode):
            # convert the size of image tool into pixels
            imageLocation = obj2pix(image, win)

            # Drawing reference landmarks in the data file.
            el_tracker.sendCommand('draw_box %d %d %d %d 15' % imageLocation)

            # Drawing reference landmarks on the Host PC screen - Optional
            # See COMMANDS.INI in the Host PC's exe folder for a list of commands
            # region occupied by the movie
            el_tracker.sendMessage('!V DRAWBOX 0 255 0 %d %d %d %d' % imageLocation)
  Routine introduction
  Routine el_Setup
    CodeComponent setupScript
      Code Type = Py
      Before Experiment:
        # load libraries
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        import pylink

        from EyelinkHelperFunctions import *
        from EyelinkSetup import *

        from string import ascii_letters, digits
        import string
        import time
        import random

        import psychtoolbox as ptb

        # set a short name for your study. This name will be the first few letters of the data file.
        studyAbbr = '' # max 3 characters
      Begin Experiment:
        # --- Show participant info dialog --
        expInfo['participant'] = studyAbbr + '_' + ''.join(random.choices(string.ascii_uppercase + string.ascii_lowercase +  string.digits, k = 4))
        expInfo['frameRate'] = round(expInfo['frameRate'])

        # loop until we get a valid filename
        while True:
            dlg = gui.DlgFromDict(dictionary=expInfo, sortKeys=False, title=expName)
            # show dialog and wait for OK or Cancel
            if dlg.OK:  # if ok_data is not None
                print('EDF data filename: {}'.format(dlg.data[0]))
            else:
                print('user cancelled')
                core.quit()
                sys.exit()
            # get the string entered by the experimenter
            tmp_str = dlg.data[0]
            # strip trailing characters, ignore the ".edf" extension
            edf_fname = tmp_str.rstrip().split('.')[0]
            # check if the filename is valid (length <= 8 & no special char)
            allowed_char = ascii_letters + digits + '_'
            if not all([c in allowed_char for c in edf_fname]):
                print('ERROR: Invalid EDF filename')
            elif len(edf_fname) > 8:
                print('ERROR: EDF filename should not exceed 8 characters')
            else:
                break
        #
        #expInfo['date'] = data.getDateStr()  # add a simple timestamp
        #expInfo['expName'] = expName
        #expInfo['psychopyVersion'] = psychopyVersion

        # Set up a folder to store the EDF data files and the associated resources
        # e.g., files defining the interest areas used in each trial
        results_folder = 'results'
        if not os.path.exists(results_folder):
            os.makedirs(results_folder)

        # We download EDF data file from the EyeLink Host PC to the local hard
        # drive at the end of each testing session, here we rename the EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = edf_fname + time_str

        # Data file name stem = absolute path + name; later add .psyexp, .csv, .log, etc
        filename = _thisDir + os.sep + \
            u'results/%s' % (session_identifier)

        # create a folder for the current testing session in the "results" folder
        session_folder = os.path.join(results_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)

        # create a 'graphics' folder to save the VFRAME commands for each trial
        #graphics_folder = os.path.join(session_folder, 'graphics')
        #if not os.path.exists(graphics_folder):
        #    os.makedirs(graphics_folder)

        # get the native screen resolution used by PsychoPy
        scn_width, scn_height = win.size

        ########################
        ### Eyelink initialization starts###
        ########################

        dummy_mode = False
        if (not dummy_mode):
            el_tracker = elSetupStep1(dummy_mode)
            el_tracker = elSetupStep2(el_tracker, edf_fname)
            el_tracker = elSetupStep3(el_tracker, dummy_mode)
            el_tracker, genv = elSetupStep4(el_tracker, win)

        ########################
        ### Eyelink initialization ends###
        ########################
      End Experiment:
        # Step 7: disconnect, download the EDF file, then terminate the task
        edf_file = edf_fname + ".EDF"
        terminate_task(win, session_folder, session_identifier, edf_file, genv)
  Routine el_Calibration
    CodeComponent calibrationScript
      Code Type = Py
      Begin Routine:
        ########################
        ### Eyelink setup starts###
        ########################
        if (not dummy_mode):
            el_tracker = elSetupStep5(el_tracker, dummy_mode)

        driftRequested = False

        ########################
        ### Eyelink setup ends###
        ########################
      End Routine:
        win.flip()
  Routine el_DriftCorrection
    CodeComponent driftCorrectionScript
      Code Type = Py
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      Before Experiment:
        # setup a variable to control whether to do driftcorrection at the beginning of each tiral.
        driftRequested = False
      Begin Routine:
        while (not dummy_mode) and driftRequested :
            # terminate the task if no longer connected to the tracker or
            # user pressed Ctrl-C to terminate the task
            if (not el_tracker.isConnected()) or el_tracker.breakPressed():
                terminate_task()
                # return pylink.ABORT_EXPT

            # drift-check and re-do camera setup if ESCAPE is pressed
            try:
                # in the following line, int(scn_width / 2), int(scn_height / 2) mean the target will show up at the center of the screen.
                # you can set the target location to other values (in pixels).
                error = el_tracker.doDriftCorrect(int(scn_width / 2), int(scn_height / 2), 1, 1)
                # break following a success drift-check
                if error is not pylink.ESC_KEY:
        #            driftRequested = False
                    continueRoutine = False  # skip attention getter for this trial.
                    break
            except:
                pass
      End Routine:
        driftRequested = False
  Routine el_SaveData
    CodeComponent saveDataScript
      Code Type = Py
      Begin Routine:
        # save data to the eye tracking file

        # record trial variables to the EDF data file, for details, see Data
        # Viewer User Manual, "Protocol for EyeLink Data to Viewer Integration"

        # as an example, the following line will create a variable of phase and assign 'test' as its value
        if (not dummy_mode):
            el_tracker.sendMessage('!V TRIAL_VAR phase %s' % 'test')

        # another example, the following line will create a variable of trialNum and assign trialLoop.thisN + 1 as its value
        if (not dummy_mode):
            el_tracker.sendMessage('!V TRIAL_VAR trialNum %s' % (trialLoop.thisN + 1))
Flow
  Routine el_Setup
  Routine introduction
  Routine el_Calibration
  LoopInitiator blockLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trialLoop loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine el_DriftCorrection
      Routine trial
    LoopTerminator trialLoop
  LoopTerminator blockLoop
